%include 'mental-nav-stim'
////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////
// Display
////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////
// var stim_onset=0

var br=.5
var bg=.5
var bb=.5

stimulus_display (
    background_color = br, bg, bb
    redraw_on_every_refresh = true
    announce_stimuli_on_implicit_updates = false
)


ellipse fixation_point (
    x_size = 1
    x_position = 0
    y_position = 0
)


////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////
// Experiment parameters
////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////


var num_trials_per_block = 10

var trials_from_meta = 1
var selection_index = 0

selection trial_index (
    values = 0:num_pairs
    selection = random_without_replacement
    advance_on_accept = YES
    autoreset = YES
)


%define update_trial_params_from_meta ()
    trials_from_meta = 1
    selection_index = trial_index
    run_python_string(get_metaparameters())
    report('Trial $py_meta_index')
    start_stim_index = py_start_stim_index
    end_stim_index = py_end_stim_index
    pair_index = py_pair_index
    stim_dist_cum = py_stim_dist_cum
    py_meta_index = py_meta_index
    // stim_drift_direction = py_stim_drift_direction
%end

%define update_trial_params_from_meta_ones ()
    trials_from_meta = 1
    selection_index = trial_index
    run_python_string(get_metaparameters())
    report('Trial $py_meta_index')
    start_stim_index = py_start_stim_index
    end_stim_index = py_end_stim_index
    pair_index = py_pair_index
    stim_dist_cum = py_stim_dist_cum
    py_meta_index = py_meta_index
    // stim_drift_direction = py_stim_drift_direction
%end

%define reset_vars ()
    stim_dist_cum = [0, 0, 0, 0, 0]
    start_stim_index = 0
    end_stim_index = 0
    pair_index = 0
    // stim_drift = 0
    // stim_drift_offset = 0
    stim_offset = 0
    stim_drift_direction = 0
    view_options = 0
%end

////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////
// Protocol
////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////

protocol 'Mental Navigation - Sequential' {
    for_each_stim {
        list {
	        live_queue_stimulus (img_stims[stim_index])
	        live_queue_stimulus (maskstims[stim_index])
        }
    }
    for_each_option_stim {
        list {
            live_queue_stimulus(option_stims[option_stim_index])
            live_queue_stimulus(option_stims_selectors[option_stim_index])
        }
    }
    reset_selection (trial_index)
    run_python_file('mental-nav_utils.py')
    block (nsamples = num_trials_per_block) {
        trial {
            task {
                state 'Begin trial' {
                    update_trial_params_from_meta_ones()
                    stim_drift_wrap_var = stim_drift_wrap
                    stim_drift_symb_dist_var = stim_drift_symb_dist
                    stim_drift_spat_dist_var = stim_drift_spat_dist
                    report ('direction = $py_stim_drift_direction')
                    report ('start index = $start_stim_index')
                    report ('end index = $end_stim_index')
                    report ('stim_drift_wrap = $stim_drift_wrap_var')
                    report ('stim_drift_symb_dist = $stim_drift_symb_dist_var')
                    report ('stim_drift_spat_dist = $stim_drift_spat_dist_var')
                    report ('stim_dist_cum = $stim_dist_cum')
                    stim_offset = -start_stim_index * (stim_size) - stim_dist_cum[start_stim_index] * stim_padding
                    stim_drift_fixed = 0
                    queue_stimulus (fixation_point)
                    update_display ()
                    report('stim_offset = $stim_offset')
                    report('stim_drift_min_var = $stim_drift_min_var')
                    report('stim_drift_max_var = $stim_drift_max_var')
                    wait (3s)
                    goto (
                        target = 'Begin drift'
                    )
                }
                state 'Begin drift' {
                    report ("*********BEGIN DRIFT**********")
                    stim_drift_direction = py_stim_drift_direction
                    stim_drift_start_time = next_frame_time()
                    goto (
                        target = 'End drift'
                        when = (stim_drift_direction == 1 and stim_drift >= stim_drift_end_pos) or (stim_drift_direction == -1 and stim_drift <= stim_drift_end_neg)
                    )
                }
                state 'End drift' {
                    report ("*********END DRIFT**********")
                    stim_drift_fixed = stim_drift
                    stim_drift_direction = 0
                    wait (1s)
                    goto (
                        target = 'Present options'
                    )
                }
                state 'Present options' {
                    view_options = 1
                    wait (5s)
                    goto (
                        target = 'End trial'
                    )
                }
                state 'End trial' {
                    accept_selections (trial_index)
                    reset_vars()
                    yield ()
                }
            }
        }
    }
}